<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0-preview1+76e8ce94db5dd636925244a720164ef8694af513"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source2</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Negate" />
      <Expression xsi:type="Add">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Point2f">
          <Value>
            <X>36</X>
            <Y>36</Y>
          </Value>
        </Operand>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Translation" Selector="X,Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:AffineTransform">
          <cv:Pivot>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Pivot>
          <cv:Translation>
            <cv:X>-187.791077</cv:X>
            <cv:Y>-200.9642</cv:Y>
          </cv:Translation>
          <cv:Rotation>0</cv:Rotation>
          <cv:Scale>
            <cv:X>1</cv:X>
            <cv:Y>1</cv:Y>
          </cv:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Transform" Selector="Item1" />
        </PropertyMappings>
        <Selector>Item2.Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:WarpAffine">
          <cv:Transform>1,0,-187.7911;0,1,-200.9642</cv:Transform>
          <cv:Flags>Linear</cv:Flags>
          <cv:FillValue>
            <cv:Val0>71</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>72</cv:Width>
            <cv:Height>72</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="8" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>