WorkflowBuilder(Version=2.9.0-preview1+76e8ce94db5dd636925244a720164ef8694af513)
GroupWorkflow Task
    SubscribeSubject IdColorTracker
    -> GroupWorkflow ActivityAnalysis
        BehaviorSubject<System.Double> ActivityThreshold

        WorkflowInput Source1 => #1
        ExternalizedMapping(Count(DisplayName=BufferCount)) => #2
        #1, #2 -> SelectMany
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> AsyncSubject IdTracker
            #1 -> MemberSelector(Selector=Key)
            -> AsyncSubject Id

            SubscribeSubject IdTracker
            -> Merge
            -> MemberSelector(Selector=Item1.Item4) => #7
            ExternalizedMapping(Count) => #8
            #7, #8 -> Bonsai.Dsp.Buffer(Count=50, Skip=1)
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0) => #11
            SubscribeSubject ActivityThreshold
            -> PropertyMapping(Value) => #13
            #11, #13 -> GreaterThan(Operand=DoubleProperty(Value=50)) => #14
            SubscribeSubject Id => #15
            #14, #15 -> WithLatestFrom
            -> WorkflowOutput

            ExternalizedMapping(Value(DisplayName=ActivityThreshold))
            -> PropertySource<DoubleProperty,System.Double>(MemberName=Value, Value=0)
            -> MulticastSubject ActivityThreshold
        -> GroupBy(KeySelector=Item2, ElementSelector=it)
        -> WorkflowOutput
    -> ReplaySubject IdActivityTracker(BufferSize=nil)

    Bonsai.Vision.FileCapture(FileName=Videos\5flies_group.avi, PlaybackRate=50, StartPosition=0, PositionUnits=Frames, Loop=true, Playing=true)
    -> PublishSubject CameraImage
    -> Bonsai.Vision.Grayscale => #5
    -> GroupWorkflow Background
        WorkflowInput Source1 => #0
        -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0) => #1
        #1, #0 -> Zip
        -> Bonsai.Dsp.AbsoluteDifference
        -> WorkflowOutput
    -> Skip(Count=20) => #7
    -> GroupWorkflow Centroids => #8
        WorkflowInput Source1 => #0
        SubscribeSubject Threshold
        -> PropertyMapping(ThresholdValue(Selector=it)) => #2
        #0, #2 -> Bonsai.Vision.Threshold(ThresholdValue=29, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=1500)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> WorkflowOutput

        BehaviorSubject<System.Double> Threshold
    #7, #8 -> GroupWorkflow FlySorting => #9
        WorkflowInput Source1 => #0
        WorkflowInput Source2 => #1
        -> Disable Condition => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=Count)
            -> NotEqual(Operand=IntProperty(Value=6))
            -> WorkflowOutput
        ExternalizedMapping(ExpectedConnectedComponents) => #3
        #2, #3 -> BinaryRegionsTracking(ExpectedConnectedComponents=5) => #4
        #0, #4 -> WithLatestFrom
        -> WorkflowOutput
        #1 -> MemberSelector(Selector=Count)
    -> SelectMany
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item2)
        -> Concat
        -> MemberSelector(Selector=Centroid) => #3
        #0 -> MemberSelector(Selector=Item1) => #4
        #3, #4 -> WithLatestFrom
        -> ElementIndex
        -> WorkflowOutput
    -> GroupBy(KeySelector=Index, ElementSelector=Value)
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> MemberSelector(Selector=Key)
        -> AsyncSubject SourceId
        #1 -> AsyncSubject Source

        SubscribeSubject Centroid => #5
        SubscribeSubject Image => #6
        SubscribeSubject ValidPoint => #7
        #6, #7 -> IncludeWorkflow(Path=Extensions\Zoomer.bonsai) => #8
        -> IncludeWorkflow(Path=Extensions\HeadTailGroup.bonsai) => #9
        #9, #8 -> IncludeWorkflow(Path=Extensions\OrientationVisualizer.bonsai) => #10
        SubscribeSubject Image => #11
        SubscribeSubject ValidPoint
        -> IncludeWorkflow(Path=Extensions\Stabilizer.bonsai) => #13
        #11, #13 -> IncludeWorkflow(Path=Extensions\Zoomer.bonsai)
        -> IncludeWorkflow(Path=Extensions\PxChange.bonsai) => #15
        #5, #9, #10, #15 -> Zip => #16
        SubscribeSubject SourceId => #17
        #16, #17 -> WithLatestFrom => #18
        -> WorkflowOutput
        #18 -> MemberSelector(Selector=Item2)

        SubscribeSubject Source
        -> Merge => #22
        -> MemberSelector(Selector=Item2)
        -> PublishSubject Image
        #22 -> MemberSelector(Selector=Item1)
        -> PublishSubject Centroid
        -> IncludeWorkflow(Path=Extensions\ValidPoint.bonsai)
        -> PublishSubject ValidPoint
    -> Take(Count=5)
    -> Zip
    -> Merge
    -> GroupBy(KeySelector=Item2, ElementSelector=it)
    -> ReplaySubject IdColorTracker(BufferSize=nil)
    #9 -> SelectMany => #18
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> Concat
        -> MemberSelector(Selector=Centroid)
        -> ToArray
        -> WorkflowOutput
    #5, #18 -> WithLatestFrom
    -> MultiVisualizer(RadiusSize=30)
    -> PublishSubject MultiTracker

    Timer(DueTime=PT0S, Period=PT1S) => #22
    ExternalizedMapping(TrackingThreshold, FreezeThreshold) => #23
    #22, #23 -> Visualizer => #24
        ExternalizedMapping(TrackingThreshold, FreezeThreshold)
        -> GroupWorkflow Visualizer
            SubscribeSubject MultiTracker
            -> VisualizerMapping => #1
            SubscribeSubject CameraImage
            -> VisualizerMapping => #3
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition => #7
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
                #7 -> MemberSelector(Selector=Key)
            -> IncludeWorkflow(Path=Extensions\IdActivityVisualizer.bonsai, Freezing(Val0=0.5, Val1=0.5, Val2=1, Val3=1), Moving(Val0=0.5, Val1=1, Val2=0.5, Val3=1))
            -> IdColorVisualizer(RadiusSize=5, NumberOfIds=5)
            -> VisualizerMapping => #8
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\CurrentActivity.bonsai)
            -> IncludeWorkflow(Path=Extensions\CurrentThreshold.bonsai)
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
            -> VisualizerMapping => #14
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\IdActivityVisualizer.bonsai, Freezing(Val0=0.5, Val1=0.5, Val2=1, Val3=1), Moving(Val0=0.5, Val1=1, Val2=0.5, Val3=1))
            -> IdColorVisualizer(RadiusSize=5, NumberOfIds=5)
            -> VisualizerMapping => #19
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\CurrentActivity.bonsai)
            -> IncludeWorkflow(Path=Extensions\CurrentThreshold.bonsai)
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
            -> VisualizerMapping => #25
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\IdActivityVisualizer.bonsai, Freezing(Val0=0.5, Val1=0.5, Val2=1, Val3=1), Moving(Val0=0.5, Val1=1, Val2=0.5, Val3=1))
            -> IdColorVisualizer(RadiusSize=5, NumberOfIds=5)
            -> VisualizerMapping => #30
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\CurrentActivity.bonsai)
            -> IncludeWorkflow(Path=Extensions\CurrentThreshold.bonsai)
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
            -> VisualizerMapping => #36
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\IdActivityVisualizer.bonsai, Freezing(Val0=0.5, Val1=0.5, Val2=1, Val3=1), Moving(Val0=0.5, Val1=1, Val2=0.5, Val3=1))
            -> IdColorVisualizer(RadiusSize=5, NumberOfIds=5)
            -> VisualizerMapping => #41
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\CurrentActivity.bonsai)
            -> IncludeWorkflow(Path=Extensions\CurrentThreshold.bonsai)
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
            -> VisualizerMapping => #47
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\IdActivityVisualizer.bonsai, Freezing(Val0=0.5, Val1=0.5, Val2=1, Val3=1), Moving(Val0=0.5, Val1=1, Val2=0.5, Val3=1))
            -> IdColorVisualizer(RadiusSize=5, NumberOfIds=5)
            -> VisualizerMapping => #52
            SubscribeSubject IdColorTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\CurrentActivity.bonsai)
            -> IncludeWorkflow(Path=Extensions\CurrentThreshold.bonsai)
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
            -> VisualizerMapping => #58
            ExternalizedMapping(Value(DisplayName=TrackingThreshold))
            -> Bonsai.Gui.SliderBuilder Threshold(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Minimum=0, Maximum=255, DecimalPlaces=0, Value=29)
            -> MulticastSubject Threshold
            -> VisualizerMapping
            -> Bonsai.Gui.TableLayoutPanelBuilder TrackingThreshold(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping => #64
            ExternalizedMapping(Value(DisplayName=FreezeThreshold))
            -> Bonsai.Gui.SliderBuilder ActivityThreshold(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Minimum=0, Maximum=1200, DecimalPlaces=0, Value=50)
            -> MulticastSubject ActivityThreshold
            -> VisualizerMapping
            -> Bonsai.Gui.TableLayoutPanelBuilder FreezeThreshold(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping => #70
            #64, #70 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
            -> VisualizerMapping => #72
            #1, #3, #8, #14, #19, #25, #30, #36, #41, #47, #52, #58, #72 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder MainControl
              ColumnCount=2
              RowCount=8
              ColumnStyles=""
              RowStyles
                RowStyle(SizeType=Percent, Height=30)
                RowStyle(SizeType=Percent, Height=10)
                RowStyle(SizeType=Percent, Height=10)
                RowStyle(SizeType=Percent, Height=10)
                RowStyle(SizeType=Percent, Height=10)
                RowStyle(SizeType=Percent, Height=10)
                RowStyle(SizeType=Percent, Height=20)
              CellSpans
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=1, RowSpan=1)
                CellSpan(ColumnSpan=2, RowSpan=1)
                CellSpan(ColumnSpan=2, RowSpan=1)
            -> WorkflowOutput

            SubscribeSubject IdActivityTracker
            -> SelectMany
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Key)
                -> AsyncSubject SourceId
                #1 -> AsyncSubject SourceStream

                SubscribeSubject SourceStream => #5
                ExternalizedMapping(Value(DisplayName=Id)) => #6
                #5, #6 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
        -> WorkflowOutput
    Source2=#24 -> WorkflowOutput
